PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = completedURL
  Completion URL = https://www.pavlovia.org
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = BDF MCBRD
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #import all libraries for experiment
        from PIL import Image, ImageDraw
        import win32api

        #get window size
        xwin, ywin = win.size

        #find image location on screen
        #(image is displayed at 1024x768 at the center
        #of the screen, regardless of individual screen size)
        #image dimensions start at the top left corner
        imageStartX = (xwin / 2) - 512
        imageStartY = (ywin / 2) - 384

        #write participant's screen dimensions,
        #the starting location of the 1024x768 BDF image,
        #and column names at beginning of output file
        #   note, if there is already content in this output file,
        #   this code will begin writing after the previous content.
        #   multiple runs can be viewed in the same file.
        outfile = open('FixatedLocations.txt','a')
        outfile.write('BEGIN EXPERIMENT')
        outfile.write('\nWindow dimensions: ')
        outfile.write('%s  %s\n' % (str(xwin),str(ywin)))
        outfile.write('Image top left corner: ')
        outfile.write('%s  %s\n' % (str(imageStartX),str(imageStartY)))
        outfile.write('Begin mouse recording... \n')
        #Column names:
        #Img = image number
        #OriX, OriY = original mouse position on the participant's screen
        #   note, positions outside BDF edges displayed as the edge value,
        #   as the nonblurred circle will not go past the image dimensions.
        #ImgX, ImgY = mouse position relative to the 1024x768 dimensions
        #   of the BDF image. Consider these dimensions standardized across
        #   participants.
        outfile.write('Img\tOriX\tOriY\tImgX\tImgY\n')
        outfile.close()
      Each Frame:
        #get mouse position
        mousePos = win32api.GetCursorPos()
        xpixel = mousePos[0]
        ypixel = mousePos[1]

        #open output file
        outfile = open('FixatedLocations.txt','a')

        #limit mouse location reporting to image dimensions
        if xpixel < imageStartX:
            xpixel = imageStartX
        #    outfile.write('out of bounds')
        elif xpixel > (imageStartX + 1024):
            xpixel = (imageStartX + 1024)
        #    outfile.write('out of bounds')
        if ypixel < imageStartY:
            ypixel = imageStartY
        #    outfile.write('out of bounds')
        elif ypixel > (imageStartY + 768):
            ypixel = (imageStartY + 768)
        #    outfile.write('out of bounds')

        #write image number to output file
        imageNumber = OriginalImage.replace('images/','')
        imageNumber = imageNumber.replace('.bmp','')
        outfile.write(imageNumber)
        #write mouse location on participant's screen
        outfile.write('\t%s\t%s\t' % (str(xpixel),str(ypixel)))

        #open the input image as numpy array, convert to RGB
        img=Image.open(OriginalImage).convert("RGB")
        npImage=np.array(img)

        #create same size alpha layer with circle
        alpha = Image.new('L', img.size,0)
        draw = ImageDraw.Draw(alpha)

        #determine mouse location relative to image dimensions,
        #and use these to display nonblurred circle
        xpixelOnImage = xpixel- imageStartX
        ypixelOnImage = ypixel- imageStartY
        #output the values used to display nonblurred circle
        outfile.write('%s\t%s\n' % (str(xpixelOnImage),str(ypixelOnImage)))
        #draw circle on alpha layer, using pixel locations -/+ the radius
        #of the circle
        draw.pieslice([(xpixelOnImage - 50),(ypixelOnImage -50),(xpixelOnImage +50),(ypixelOnImage +50)],0,360,fill=255)
        #close output file
        outfile.close()

        #convert alpha Image to numpy array
        npAlpha=np.array(alpha)

        #add alpha layer to RGB
        npImage=np.dstack((npImage,npAlpha))

        #save with alpha
        Image.fromarray(npImage).save('images/result.png')
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ImageComponent imageStimulus
      image [set every frame] = $BlurredImage
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent imageAperture
      image [set every frame] = images/result.png
      pos [set every frame] = (0,0)
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Instructions
    TextComponent text
      color = black
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        View picture stories by using your mouse to reveal detailed information in each image.

        Use the space bar to proceed to the next image.


        Press space to begin.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text_2
      color = black
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = All done! Thank you!
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ImageList.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('OriginalImage', 'images/01001.bmp'), ('BlurredImage', 'images/blurred01001.bmp')]),
      OrderedDict([('OriginalImage', 'images/01002.bmp'), ('BlurredImage', 'images/blurred01002.bmp')]),
      OrderedDict([('OriginalImage', 'images/01003.bmp'), ('BlurredImage', 'images/blurred01003.bmp')]),
      OrderedDict([('OriginalImage', 'images/01004.bmp'), ('BlurredImage', 'images/blurred01004.bmp')]),
      OrderedDict([('OriginalImage', 'images/01005.bmp'), ('BlurredImage', 'images/blurred01005.bmp')]),
      OrderedDict([('OriginalImage', 'images/01006.bmp'), ('BlurredImage', 'images/blurred01006.bmp')]),
      OrderedDict([('OriginalImage', 'images/01007.bmp'), ('BlurredImage', 'images/blurred01007.bmp')]),
      OrderedDict([('OriginalImage', 'images/01008.bmp'), ('BlurredImage', 'images/blurred01008.bmp')]),
      OrderedDict([('OriginalImage', 'images/01009.bmp'), ('BlurredImage', 'images/blurred01009.bmp')]),
      OrderedDict([('OriginalImage', 'images/01010.bmp'), ('BlurredImage', 'images/blurred01010.bmp')]),
      OrderedDict([('OriginalImage', 'images/01011.bmp'), ('BlurredImage', 'images/blurred01011.bmp')]),
      OrderedDict([('OriginalImage', 'images/01012.bmp'), ('BlurredImage', 'images/blurred01012.bmp')]),
      OrderedDict([('OriginalImage', 'images/01013.bmp'), ('BlurredImage', 'images/blurred01013.bmp')]),
      OrderedDict([('OriginalImage', 'images/01014.bmp'), ('BlurredImage', 'images/blurred01014.bmp')]),
      OrderedDict([('OriginalImage', 'images/01015.bmp'), ('BlurredImage', 'images/blurred01015.bmp')])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
    Routine trial
  LoopTerminator trials
  Routine End
